<kilroy_configuration num_valves="1" cnc="True" num_pumps="1">

  <kilroy_hyperprotocols>

    <hyperprotocol name="test">

      <protocol name="Hybridize 1" />

      <protocol name="Wait Microscopy" />

      <protocol name="Wait Microscopy" />

      <protocol name="Wait Microscopy" />

      <protocol name="Wait Microscopy" />

      <protocol name="Wait Microscopy" />

      <protocol name="Wait Microscopy" />

      <protocol name="Wait Microscopy" />

      <protocol name="Wait Microscopy" />

      <protocol name="Wait Microscopy" />

      <protocol name="Wait Microscopy" />

    </hyperprotocol>

  </kilroy_hyperprotocols>

</kilroy_configuration>

