<kilroy_configuration num_valves="1" cnc="True" num_pumps="1">

  <kilroy_hyperprotocols>

    <hyperprotocol name="test3">

      <protocol name="Hybridize 5" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 6" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 7" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 8" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 9" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 10" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 11" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 12" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 13" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 14" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 15" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 16" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 17" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 18" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 19" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 20" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 21" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 22" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 23" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 24" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 25" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 26" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 27" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 28" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 29" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 30" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 31" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 32" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 33" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 34" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 35" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 36" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 37" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 38" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 39" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 40" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 41" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 42" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 43" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 44" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 45" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 46" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 47" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 48" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 49" />

      <protocol name="Wait Microscopy" />

      <protocol name="Hybridize 50" />

      <protocol name="Wait Microscopy" />

    </hyperprotocol>

  </kilroy_hyperprotocols>

</kilroy_configuration>

